CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['Generated by Microscopy Preprocessing Manager. File list is supplied from command line.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['Metadata is intentionally disabled in the first preprocessing release: each generated pipeline receives exactly one channel through --file-list.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FileName>.*)$
    Regular expression to extract from folder name:(?P<Folder>.*)$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['One-channel pipeline. Every TIFF in --file-list is one independent image set.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:Input
    Match metadata:[]
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (extension does isimage)
    Name to assign these images:Input
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['Grouping disabled so CellProfiler may use its normal worker pool.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:Folder

CorrectIlluminationCalculate:[module_num:5|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['Reference settings reproduced from colleague CellProfiler 4.2.8 illumination project.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Input
    Name the output image:Illumination
    Select how the illumination function is calculated:Background
    Dilate objects in the final averaged image?:No
    Dilation radius:1
    Block size:200
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
    Method to calculate smoothing filter size:Manually
    Approximate object diameter:10
    Smoothing filter size:30
    Retain the averaged image?:No
    Name the averaged image:IlluminationAvg
    Retain the dilated image?:No
    Name the dilated image:IlluminationDilated
    Automatically calculate spline parameters?:Yes
    Background mode:auto
    Number of spline points:5
    Background threshold:2.0
    Image resampling factor:2.0
    Maximum number of iterations:40
    Residual value for convergence:0.001

CorrectIlluminationApply:[module_num:6|svn_version:'Unknown'|variable_revision_number:5|show_window:False|notes:['Apply illumination correction by subtraction.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Input
    Name the output image:Corrected
    Select the illumination function:Illumination
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:7|svn_version:'Unknown'|variable_revision_number:16|show_window:False|notes:['Preserve original image filename; output directory is provided through -o for this channel.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:Corrected
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
    Enter single file name:Corrected
    Number of digits:4
    Append a suffix to the image file name?:No
    Text to append to the image name:
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)
    Save with lossless compression?:No
