CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:['Generated by Analyst DB Builder; input TIFFs are supplied via --file-list.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\/]\.")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['Biological metadata are intentionally excluded from classifier features.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*
    Regular expression to extract from folder name:.*
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:['Order matching is safe because Curator exports identical img_NNN stems across folders.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[]
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:3
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (directory does endwith "BrightField")
    Name to assign these images:BrightField
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (directory does endwith "GFP")
    Name to assign these images:GFP
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0
    Select the rule criteria:and (directory does endwith "MasksCell")
    Name to assign these images:MaskLabels
    Name to assign these objects:Cells0
    Select the image type:Objects
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:None

FilterObjects:[module_num:5|svn_version:'Unknown'|variable_revision_number:10|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the objects to filter:Cells0
    Name the output objects:Cells
    Select the filtering mode:Image or mask border
    Select the filtering method:Limits
    Select the objects that contain the filtered objects:None
    Select the location of the rules or classifier file:Elsewhere...|
    Rules or classifier file name:rules.txt
    Class number:1
    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Both parents
    Keep removed objects as a separate set?:No
    Name the objects removed by the filter:RemovedObjects
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Allow fuzzy feature matching?:No

MeasureObjectSizeShape:[module_num:6|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select object sets to measure:Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:7|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:GFP
    Select objects to measure:Cells

MeasureGranularity:[module_num:8|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:BrightField, GFP
    Measure within objects?:Yes
    Select objects to measure:Cells
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:5

MeasureTexture:[module_num:9|svn_version:'Unknown'|variable_revision_number:7|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:BrightField, GFP
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:2
    Measure whole images or objects?:Objects
    Texture scale to measure:4
    Texture scale to measure:8

MeasureObjectIntensityDistribution:[module_num:10|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:GFP
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
    Maximum zernike moment:9
    Select objects to measure:Cells
    Object to use as center?:These objects
    Select objects to use as centers:None
    Scale the bins?:Yes
    Number of bins:4
    Maximum radius:100

ExportToDatabase:[module_num:11|svn_version:'Unknown'|variable_revision_number:28|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Database type:SQLite
    Database name:DefaultDB
    Add a prefix to table names?:No
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
    Database host:
    Username:
    Password:
    Name the SQLite database file:Cells.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:Select...
    Select the objects:Cells
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
    Enter an image url prepend if you plan to access your files via http:
    Write image thumbnails directly to the database?:No
    Select the images for which you want to save thumbnails:
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
    Select the plate metadata:None
    Select the well metadata:None
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:1
    Experiment name:CuratorTraining
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:type
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
    Select an image to include:None
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:red
    Do you want to add group fields?:No
    Enter the name of the group:
    Enter the per-image columns which define the group, separated by commas:ImageNumber
    Do you want to add filter fields?:No
    Automatically create a filter for each plate?:No
    Create a CellProfiler Analyst workspace file?:No
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
    Enter the object name:None
    Select the X-axis measurement:None
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
    Enter the object name:None
    Select the Y-axis measurement:None
    Select the Y-axis index:ImageNumber
